<CompuCell3D Revision="20150808" Version="3.7.4">
   <Potts>
      <Dimensions x="150" y="150" z="1"/>
      <Steps>1010</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <RandomSeed>8366694</RandomSeed>
   </Potts>
   <Plugin Name="PlayerSettings">
      <VisualControl ScreenshotFrequency="1000"/>
   </Plugin>
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="9" TypeName="Wall"/>
      <CellType TypeId="1" TypeName="1"/>
      <CellType TypeId="2" TypeName="2"/>
   </Plugin>
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="1" LambdaVolume="1.70297419017" TargetVolume="36"/>
      <VolumeEnergyParameters CellType="2" LambdaVolume="1.92018960691" TargetVolume="49"/>
   </Plugin>
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="1" LambdaSurface="1.11384912516" TargetSurface="15"/>
      <SurfaceEnergyParameters CellType="2" LambdaSurface="1.46949014634" TargetSurface="22"/>
   </Plugin>
   <Plugin Name="CenterOfMass"/>
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Wall" Type2="Wall">0.0</Energy>
      <Energy Type1="Wall" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="1">19.4103681188</Energy>
      <Energy Type1="Wall" Type2="1">50.0</Energy>
      <Energy Type1="1" Type2="1">9</Energy>
      <Energy Type1="1" Type2="2">7</Energy>
      <Energy Type1="Medium" Type2="2">5.55837526258</Energy>
      <Energy Type1="Wall" Type2="2">50.0</Energy>
      <Energy Type1="2" Type2="2">29</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   <Plugin Name="Chemotaxis">
      <ChemicalField Name="FDS" Source="DiffusionSolverFE"/>
   </Plugin>
   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="FDS">
         <DiffusionData>
            <FieldName>FDS</FieldName>
            <GlobalDiffusionConstant>0.0245833823087</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.77650160215</GlobalDecayConstant>
            <DiffusionCoefficient CellType="Wall">0</DiffusionCoefficient>
            <DoNotDiffuseTo CellType="Wall">Wall</DoNotDiffuseTo>
            <SecretionData>
               <Secretion Type="1">96.2229316655</Secretion>
               <Secretion Type="2">14.3170150403</Secretion>
            </SecretionData>
         </DiffusionData>
      </DiffusionField>
   </Steppable>
   <Steppable Type="RandomFieldInitializer">
      <offset x="10" y="10" z="0"/>
      <growthsteps>10</growthsteps>
      <order>2</order>
      <types>1,2</types>
      <ncells>194</ncells>
   </Steppable>
</CompuCell3D>
